PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = NavUtil_Rating
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent imageA
      image [set every repeat] = $landmark_imagesA
      pos = (-.25, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent imageB
      image [set every repeat] = $landmark_imagesB
      pos = (0, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent imageC
      image [set every repeat] = $landmark_imagesC
      pos = (0.25, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On a scale of 1-5, how would you rate the object on its navigational utility?
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Welcome to the Navigational Utility Rating Task
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will look at the following objects and rate it 1-5 on navigational utility. Navigational utility in regards to an object means how likely you would use the object as a landmark if you were to navigate an indoor environment. 1 being least likely, 3 being moderately likely, and 5 being very likely.

        Press SPACEBAR to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating in the Navigational Utility Task
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Flow
  Routine Welcome
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = landmark_stims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'landmark_imagesA': 'images/Landmark1.png', 'landmark_imagesB': 'images/Landmark5.png', 'landmark_imagesC': 'images/Landmark9.png'},
      {'landmark_imagesA': 'images/Landmark2.png', 'landmark_imagesB': 'images/Landmark6.png', 'landmark_imagesC': 'images/Landmark10.png'},
      {'landmark_imagesA': 'images/Landmark3.png', 'landmark_imagesB': 'images/Landmark7.png', 'landmark_imagesC': 'images/Landmark11.png'},
      {'landmark_imagesA': 'images/Landmark4.png', 'landmark_imagesB': 'images/Landmark8.png', 'landmark_imagesC': 'images/Landmark12.png'}]
    Routine trial
  LoopTerminator trials
  Routine end
